OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-magic-card.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #1
#1.Output stream 1 -> Channel selector
  Channels list = Cz;O1;O2
  Selection by index = false
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #4
  Decimation factor = 4
Input stream 1=#4, Input stream 2=#1.Output stream 2 -> Identity => #5
Signal=#5.Output stream 1, Stimulations=#5.Output stream 2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Sequence stimulations=#1.Output stream 2, Target stimulations=#1.Output stream 3 -> P300 Magic Card Visualisation
  Interface filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/arkanoid.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/bomberman.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/doom.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/dott.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/lemmings.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/mario.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/megaman.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/pacman.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/sonic.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/space-invaders.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/worms.png
  Card filename = ../share/openvibe-plugins/simple-visualisation/p300-magic-card/zelda.png

Acquisition client => #8
  Acquisition server hostname = openvibe
  Acquisition server port = 1024
Keyboard stimulator
  Filename = ../share/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #10
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> 0xc67a01dc Target Card Generation => #11
  Lua Script = ${Path_Samples}/bci/p300-magic-card/p300-magic-card-stimulations-targets.lua
  Card Count = 12
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
Input stream 1=#8.Experiment information, Input stream 2=#8.Signal strea, Input stream 3=#10, Input stream 4=#11 -> Identity => #12
Input stream 1=#12.Output stream 1, Input stream 2=#12.Output stream 2, Input stream 3=#12.Output stream 3, Input stream 4=#12.Output stream 4 -> Generic stream writer
  Filename = ${Path_Samples}/signals/current-[$core{date}-$core{time}].ov
  Use compression = true
